\===============================================================Delmas,2015===\
\======================= Discriminar Cantidades de alimento ==================\
\ En este entrenamiento las ratas debe aprender a discriminar la cantidad de  \
\ comida que cada palanca entrega. Por ejemplo, discriminar entre un y dos    \
\ pellets. Existe dos palancas fijas, una Izquierda y otra Derecha con sus    \
\ respectivos estimulos luminosos.                                            \
\===============================================================Delmas,2015===\
\ Protocolo                                                                   \
\ Nº de trials = 30
\ Tiempo p\ palanqueo = 20min (def=10s)
\ Tiempo p\ comer     = 5s (def=5)
\ ITI                 = 5s (def=5) Luz apagada 

\=Variables===================================================================\
\ A=Trials
\ B=Respuestas
\ paramatros de los  trials                                                  \
^nTrials=30
^tPalanca=60       \definidos en comienzo de trial
\ C = Detiene el comp. de tiempo x palanqueo y determina cantidad: 1 o 2pellets
\ Q=^ITI=0
\ P=^tComer=0
\ D = reloj - tiempo de palanqueo
\ E = lista
\ F = toma al azar
\ G = cambiar roles de refuerzos. ComeUno a ComeDos
\ H = array para la hora
\ I = Cuenta reloj
\ J = Reloj
\ K = Cuenta reloj
\ L = Cantidad de intercambios
\ R = respuestas
\ S = palanqueos en ITI
\ Y = tiempo de trial
\ Z = Cantidad de Trials

dim H=2 \tiempo para el trials
dim J=2 \Reloj
dim D=1 \Reloj segundos - Tiempo de palanqueo
dim R=1 \Respuestas 1-Izq y 2-Der
dim G=2 \contadores para cambiar la cantidad de refuerzos
dim S=2 \ (0)habilita control de ITI y cuenta palanqueos (1)IZQ y (2)DER
list E=0,1,2,3,4,5,6,7,8,9

\ Variables a guardar en disco en cada 'flush'.
DISKVARS=A,B,C,D,E(5),F,R,Y,Q,S
\=============================================================================\

\=SALIDAS=====================================================================\
\ ^constantes

 
\OUTPUT
^luzCaja=15 \\puertos
^refuerzo=2
^sacarPalancaShaping=16 \no se utiliza (centro)
^sacarPalancaDer=4
^sacarPalancaIzq=5
^luzPalancaDer=14
^luzPalancaIzq=11
^luzPalancaCen=8  
^luzComedero=3

\INPUT
^palancaDer=3
^palancaIzq=7
^palancaShaping=8 \ palancaCentro

\=============================================================================\
\ Z-PULSE en uso
\ Z1 = empieza el trial 
\ Z2 = Inicia comparacion, espera hasta q se cumpla el tiempo p/ palanquear
\      Luego se va a ITI
\ Z3 = Fin de trial (continua ITI sin luz)
\ Z4 = Inicio de ITI
\ Z5 = Control de luces de palanca
\ Z7 = Secuencia para dispenzar refuerzo
\ Z8 = Habilita control de palanqueo en ITI
\=============================================================================\

S.S.1, \Control de la cantidad de experimentos y seteo de tiempos

S1,
  #START:Z1;set A=0;set B=0;set C=0; set R(0)=0;set R(1)=0;set S(0)=0;set S(1)=0;
  set S(2)=0;set Q=8";set Y=30;set P=5";set Z=30;RANDI F=E;set G(0)=0;set G(1)=0;
  set L=(Z/2)--->S2
S2,
  #Z1:add A;set C=0;set S(0)=0;set S(1)=0;set S(2)=0;set Q=8";
  show 1, Trial, A;show 2, Inicio,1; 
     if (A=Z) [@fin,@sigTrial]
               @fin:--->S5
               @sigTrial:--->S3
  S3, \Enciende las luces estimulos
    0.01":OFF^sacarPalancaShaping;
          ON^sacarPalancaDer;    \NUNCA se GUARDAN
          ON^sacarPalancaIzq;
    time H(0),H(1),H(2); SET I=Y;
    SET I=(((H(0)*3600)+(H(1)*60)+H(2))+ I);Z5;Z2 ---> S4 
                              \ + tiempo de trial
  S4, \Apaga las luces estimulos
    #Z3:OFF^luzPalancaCen;
        OFF^luzComedero;
        OFF^luzPalancaDer;
        OFF^luzPalancaIzq;
        OFF^sacarPalancaShaping;
    show 2, finPalanqueo,1;Z4 ---> S2 \ espera fin de ITI  
  S5, 
    0.01":OFF^luzCaja;OFF^luzPalancaCen --->stopabortflush \Fin del experimentos

S.S.2,  \Reloj : contador de tiempo infinito
  S1,
    #START:--->S2
  S2,
    0.01":TIME  J(0),J(1),J(2); SET K=(J(0)*3600 + J(1)*60 + J(2));
    set D(0)=(I-K) --->S3
  S3,
    0.01":Show 3,t.trial,D(0) --->S2


S.S.3,  \Control de tiempo p/ palanquear, luego se va a ITI
  S1,
    #Z2: --->S2
  S2,        \ Reloj > tiempo p/ palanquear
    0.01": if (K > I) [@finTrial,@cont]
                        @finTrial:Z3 ---> S1 \ dispara apagar todo y luego ITI
                        @cont: --->S3
  S3,
    0.01": if (C>0) [@parar,@cont]
                              @parar: ---> S1  \Si para es xq se palanqueo
                              @cont: ---> S2

S.S.4,  \ITI
  S1,
    #Z4:set S(0)=1;show 2, ITI,D(0) ---> S2
  S2,
    Q#T:flush ---> S3  \ITI es el tiempo de ITI seteado en S.S.1
  S3,
    1.00":set S(0)=0;Z1 ---> S1


S.S.5, \Palanca Derecha Presionada 
  S1,
    #R^palancaDer: if(F>=E(5)) [@comeUno,@comeDos]
                             @comeUno:--->S2  
                             @comeDos:--->S3
  S2, \ComeUNO
    0.01":if (C>0) [@nada,@cont]
                    @nada: ---> S4          \ Ya se palanqueo         
                    @cont:set C=1;add R(1);Z7 ---> S1        \ Se va a comer
  S3, \comeDOS
    0.01":if (C>0) [@nada,@cont]
                    @nada: ---> S4          \ Ya se palanqueo
                    @cont:set C=2;add R(1);Z7 ---> S1        \ Se va a comer 
  S4, \Incrementa el ITI = Q
    0.01":if(S(0)=1) [@incrementa,@nada]
                      @incrementa:set Q=Q+2";add S(2);show 2, ITI,Q;
                                  show 6, ITI DER, S(1) --->S1
                      @nada: --->S1        
 

S.S.6, \Palanca Izquierda Presionada 
  S1,
    #R^palancaIzq: if(F<E(5)) [@comeUno,@comeDos]
                             @comeUno:--->S2
                             @comeDos:--->S3
  S2, \ComeUNO
    0.01":if (C>0) [@nada,@cont]
                    @nada: ---> S4          \ Ya se palanqueo         
                    @cont:set C=1;add R(0);Z7 ---> S1        \ Se va a comer
  S3, \comeDOS
    0.01":if (C>0) [@nada,@cont]
                    @nada: ---> S4          \ Ya se palanqueo
                    @cont:set C=2;add R(0);Z7 ---> S1        \ Se va a comer    
  S4, \Incrementa el ITI = Q
    0.01":if(S(0)=1) [@incrementa,@nada]
                      @incrementa:set Q=Q+2";add S(1);show 2, ITI,Q;
                                  show 5, ITI IZQ, S(1) --->S1
                      @nada: --->S1 

S.S.7, \ Secuencia para dar refuerzo
  S1,
    #Z7:set D(1)=D(0) ---> S2
  S2,
    0.1":OFF^luzPalancaCen;
         ON^luzComedero;
         OFF^luzPalancaDer;
         OFF^luzPalancaIzq;
    show 4, Come, C;
    show 2, COMER,D(0);
    show 5, Resp. IZQ, R(0);
    show 6, Resp. DER, R(1)  --->S3
  S3,
    1.00":ON^refuerzo ---> S4  \Ver si es necesario sonido
  S4,
    0.01":OFF^refuerzo ---> S5
  S5,
    0.01":if(C=1)[@comeUNO,@comeTRES] 
                  @comeUNO: --->S10
                  @comeTRES: --->S6
  S6,
    1.00":ON^refuerzo ---> S7  \Ver si es necesario sonido
  S7,
    0.01":OFF^refuerzo ---> S8
  S8,
    1.00":ON^refuerzo ---> S9  \Ver si es necesario sonido
  S9,
    0.01":OFF^refuerzo ---> S10
  s10,
    P#T:Z3 --->S1  \Se va a apagar todo y al ITI
		
		
S.S.8, \Control de luces de palancas
  S1, 
    #Z5:ON^luzPalancaDer;
        ON^luzPalancaIzq ---> S2      
  S2,
    0.01": ---> S1
  


